---
API: 2.1
OpenSesame: 3.3.2
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title ANT
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad ANT_AfterCue
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad ANT_Cue
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='no_cue'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='centre_cue'" text="*" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='double_cue'" text="*" x=-2.0 y=-163.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='double_cue'" text="*" x=0.0 y=160.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='spatial_cue_top'" text="*" x=3.0 y=-166.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='spatial_cue_bottom'" text="*" x=0.0 y=160.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='double_cue'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='spatial_cue_top'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='spatial_cue_bottom'" text="+" x=0 y=0 z_index=0

define sketchpad ANT_Fix2
	set duration "[fix2]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad ANT_Fixation
	set duration "[fix1]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define loop ANT_Loop
	set source table
	set repeat 3
	set order random
	set description "Repeatedly runs another item"
	set cycles 60
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Neutral_Left
	setcycle 0 Condition neutral
	setcycle 0 correct_response z
	setcycle 0 cue_type no_cue
	setcycle 0 target_loc top
	setcycle 1 stimuli Neutral_Right
	setcycle 1 Condition neutral
	setcycle 1 correct_response "/"
	setcycle 1 cue_type no_cue
	setcycle 1 target_loc top
	setcycle 2 stimuli Congruent_Left
	setcycle 2 Condition congruent
	setcycle 2 correct_response z
	setcycle 2 cue_type no_cue
	setcycle 2 target_loc top
	setcycle 3 stimuli Congruent_Right
	setcycle 3 Condition congruent
	setcycle 3 correct_response "/"
	setcycle 3 cue_type no_cue
	setcycle 3 target_loc top
	setcycle 4 stimuli Incongruent_Left
	setcycle 4 Condition incongruent
	setcycle 4 correct_response z
	setcycle 4 cue_type no_cue
	setcycle 4 target_loc top
	setcycle 5 stimuli Incongruent_Right
	setcycle 5 Condition incongruent
	setcycle 5 correct_response "/"
	setcycle 5 cue_type no_cue
	setcycle 5 target_loc top
	setcycle 6 stimuli Neutral_Left
	setcycle 6 Condition neutral
	setcycle 6 correct_response z
	setcycle 6 cue_type centre_cue
	setcycle 6 target_loc top
	setcycle 7 stimuli Neutral_Right
	setcycle 7 Condition neutral
	setcycle 7 correct_response "/"
	setcycle 7 cue_type centre_cue
	setcycle 7 target_loc top
	setcycle 8 stimuli Congruent_Left
	setcycle 8 Condition congruent
	setcycle 8 correct_response z
	setcycle 8 cue_type centre_cue
	setcycle 8 target_loc top
	setcycle 9 stimuli Congruent_Right
	setcycle 9 Condition congruent
	setcycle 9 correct_response "/"
	setcycle 9 cue_type centre_cue
	setcycle 9 target_loc top
	setcycle 10 stimuli Incongruent_Left
	setcycle 10 Condition incongruent
	setcycle 10 correct_response z
	setcycle 10 cue_type centre_cue
	setcycle 10 target_loc top
	setcycle 11 stimuli Incongruent_Right
	setcycle 11 Condition incongruent
	setcycle 11 correct_response "/"
	setcycle 11 cue_type centre_cue
	setcycle 11 target_loc top
	setcycle 12 stimuli Neutral_Left
	setcycle 12 Condition neutral
	setcycle 12 correct_response z
	setcycle 12 cue_type double_cue
	setcycle 12 target_loc top
	setcycle 13 stimuli Neutral_Right
	setcycle 13 Condition neutral
	setcycle 13 correct_response "/"
	setcycle 13 cue_type double_cue
	setcycle 13 target_loc top
	setcycle 14 stimuli Congruent_Left
	setcycle 14 Condition congruent
	setcycle 14 correct_response z
	setcycle 14 cue_type double_cue
	setcycle 14 target_loc top
	setcycle 15 stimuli Congruent_Right
	setcycle 15 Condition congruent
	setcycle 15 correct_response "/"
	setcycle 15 cue_type double_cue
	setcycle 15 target_loc top
	setcycle 16 stimuli Incongruent_Left
	setcycle 16 Condition incongruent
	setcycle 16 correct_response z
	setcycle 16 cue_type double_cue
	setcycle 16 target_loc top
	setcycle 17 stimuli Incongruent_Right
	setcycle 17 Condition incongruent
	setcycle 17 correct_response "/"
	setcycle 17 cue_type double_cue
	setcycle 17 target_loc top
	setcycle 18 stimuli Neutral_Left
	setcycle 18 Condition neutral
	setcycle 18 correct_response z
	setcycle 18 cue_type spatial_cue_top
	setcycle 18 target_loc top
	setcycle 19 stimuli Neutral_Right
	setcycle 19 Condition neutral
	setcycle 19 correct_response "/"
	setcycle 19 cue_type spatial_cue_top
	setcycle 19 target_loc top
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	setcycle 24 stimuli Neutral_Left
	setcycle 24 Condition neutral
	setcycle 24 correct_response "/"
	setcycle 24 cue_type spatial_cue_bottom
	setcycle 24 target_loc bottom
	setcycle 25 stimuli Neutral_Right
	setcycle 25 Condition neutral
	setcycle 25 correct_response z
	setcycle 25 cue_type spatial_cue_bottom
	setcycle 25 target_loc bottom
	setcycle 26 stimuli Congruent_Left
	setcycle 26 Condition congruent
	setcycle 26 correct_response "/"
	setcycle 26 cue_type spatial_cue_bottom
	setcycle 26 target_loc bottom
	setcycle 27 stimuli Congruent_Right
	setcycle 27 Condition congruent
	setcycle 27 correct_response z
	setcycle 27 cue_type spatial_cue_bottom
	setcycle 27 target_loc bottom
	setcycle 28 stimuli Incongruent_Left
	setcycle 28 Condition incongruent
	setcycle 28 correct_response "/"
	setcycle 28 cue_type spatial_cue_bottom
	setcycle 28 target_loc bottom
	setcycle 29 stimuli Incongruent_Right
	setcycle 29 Condition incongruent
	setcycle 29 correct_response z
	setcycle 29 cue_type spatial_cue_bottom
	setcycle 29 target_loc bottom
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	setcycle 31 stimuli Neutral_Right
	setcycle 31 Condition neutral
	setcycle 31 correct_response m
	setcycle 31 cue_type no_cue
	setcycle 31 target_loc bottom
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	setcycle 33 stimuli Congruent_Right
	setcycle 33 Condition congruent
	setcycle 33 correct_response m
	setcycle 33 cue_type no_cue
	setcycle 33 target_loc bottom
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	setcycle 35 stimuli Incongruent_Right
	setcycle 35 Condition incongruent
	setcycle 35 correct_response m
	setcycle 35 cue_type no_cue
	setcycle 35 target_loc bottom
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	setcycle 49 stimuli Neutral_Right
	setcycle 49 Condition neutral
	setcycle 49 correct_response m
	setcycle 49 cue_type spatial_cue_top
	setcycle 49 target_loc top
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	setcycle 51 stimuli Congruent_Right
	setcycle 51 Condition congruent
	setcycle 51 correct_response m
	setcycle 51 cue_type spatial_cue_top
	setcycle 51 target_loc top
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	setcycle 53 stimuli Incongruent_Right
	setcycle 53 Condition incongruent
	setcycle 53 correct_response m
	setcycle 53 cue_type spatial_cue_top
	setcycle 53 target_loc top
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	run ANT_Sequence

define sketchpad ANT_PRACT_TO_EXP
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=50 html=yes show_if=always text="Attentional Network Task<br /><br />Practice Trials Finished!" x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=always text="Any questions?<br /><br /><br /><br />If not, press any key to start the task.<br /><br />Remember, you will no longer receive feedback." x=0.0 y=96.0 z_index=0

define inline_script ANT_Randomise_Fixation
	set description "Executes Python code"
	___run__
	# import random
	# var.fix1 = random.randint(400,1600)
	# var.fix2 = 3500-var.fix1
	__end__
	___prepare__
	import random
	var.fix1 = random.randint(400,1600)
	var.fix2 = 3500-var.fix1
	__end__

define keyboard_response ANT_Response
	set timeout 1700
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z; /"

define sequence ANT_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ANT_Randomise_Fixation always
	run ANT_Fixation always
	run ANT_Cue always
	run ANT_AfterCue always
	run ANT_Target always
	run ANT_Response always
	run Logger_All always
	run ANT_Fix2 always

define sketchpad ANT_Target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw image center=1 file="[stimuli].png" scale=1 show_if="[target_loc]='top'" x=0.0 y=-192.0 z_index=0
	draw image center=1 file="[stimuli].png" scale=1 show_if="[target_loc]='bottom'" x=0.0 y=192.0 z_index=0

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="The End" x=0 y=-224 z_index=0
	draw textline center=1 color="#ff0000" font_bold=yes font_family=mono font_italic=no font_size=40 html=yes show_if=always text="Insert Debrief and Contact Details" x=0 y=-32 z_index=0

define logger Logger_All
	set description "Logs experimental data"
	set auto_log yes

define sketchpad PractANT_Instr1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=40 html=yes show_if=always text="Attentional Network Task" x=0.0 y=-248.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=always text="You will be asked to identify the direction of arrow for this task." x=2.0 y=-125.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=always text="The arrow will be flanked by either two lines on either side, <br />or other arrows.<br /><br />If the flankers are also arrows, they can either point <br />in the same direction as the centre arrow, or the opposite direction." x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=30 html=yes show_if=always text="Press any key to see an overview of the possible targets." x=0 y=256 z_index=0

define sketchpad PractANT_Instr2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=40 html=yes show_if=always text="The Targets" x=-128.0 y=-288.0 z_index=0
	draw image center=0 file="Congruent_Right.png" scale=0.4 show_if=always x=32 y=128 z_index=0
	draw image center=0 file="Congruent_Left.png" scale=0.4 show_if=always x=-416 y=128 z_index=0
	draw image center=0 file="Incongruent_Left.png" scale=0.4 show_if=always x=-416 y=192 z_index=0
	draw image center=0 file="Incongruent_Right.png" scale=0.4 show_if=always x=32 y=192 z_index=0
	draw image center=0 file="Neutral_Left.png" scale=0.4 show_if=always x=-416 y=64 z_index=0
	draw image center=0 file="Neutral_Right.png" scale=0.4 show_if=always x=32 y=64 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=28 html=yes show_if=always text="Your task is to identify in which direction the CENTRE arrow points.<br /><br />If it points to the right, press /, <br />if it points to the left, press Z." x=0.0 y=-128.0 z_index=0
	draw line color=black penwidth=6 show_if=always x1=0 x2=0 y1=-32 y2=288 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=35 html=yes show_if=always text="Press Z for:" x=-224.0 y=0.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=35 html=yes show_if=always text="Press / for:" x=211.0 y=0.0 z_index=0

define sketchpad PractANT_Instr3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=40 html=yes show_if=always text="Attentional Network Task" x=32.0 y=-288.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=25 html=yes show_if=always text="In some cases, the targets may be preceeded<br />by an * indicating where the target will appear, <br />i.e. above or below the fixation cross." x=15.0 y=-164.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=25 html=yes show_if=always text="For some trials, you may also see a centrally presented * or two *. <br />In this case, the target may appear above or below the fixation cross.<br /><br />For other trials, you will only see the fixation cross. In that case, too, <br />the target may appear above or below the fixation cross." x=32.0 y=0.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="Press any key to see an overview <br />of the possible cues." x=0.0 y=192.0 z_index=0

define sketchpad PractANT_Instr4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="+" x=-288.0 y=-160.0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=192 x=-384.0 y=-224.0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=192 x=32.0 y=-224.0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=192 x=-352.0 y=64.0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=192 x=-96.0 y=64.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="+" x=129.0 y=-163.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="+" x=-256.0 y=128.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="*" x=-288.0 y=-192.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="*" x=128.0 y=-128.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="*" x=-256.0 y=96.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="*" x=-256.0 y=160.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="*" x=0.0 y=128.0 z_index=0
	draw textline center=0 color="#009a00" font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="= The Target will <br />appear above the <br />fixation cross" x=-191.0 y=-201.0 z_index=0
	draw textline center=0 color="#009a00" font_bold=no font_family=sans font_italic=no font_size=20 html=yes show_if=always text="= The Target will <br />appear below the <br />fixation cross" x=224.0 y=-192.0 z_index=0
	draw rect color=black fill=0 h=128 penwidth=1 show_if=always w=192 x=160.0 y=64.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=18 html=yes show_if=always text="+" x=256.0 y=128.0 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=60 html=yes show_if=always text="The Cues" x=-128 y=-384 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="No Target location indicated" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="If the fixation cross changes into an *, or two * appear above and below the fixation<br />cross, the target is about to appear. Sometimes, no cue will appear prior to the target." x=0.0 y=32.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="Press any key to start the experiment." x=0 y=256 z_index=0

define sequence Pract_ANT
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Randomise_Fixation_1_1 always
	run Pract_ANT_Fixation always
	run Pract_ANT_Cue always
	run Pract_ANT_AfterCue always
	run Pract_ANT_Target always
	run Pract_ANT_Response always
	run Logger_All always
	run feedback_correct "[correct]=1"
	run feedback_incorrect "[correct]=0"
	run Pract_ANT_Fix2 always

define sketchpad Pract_ANT_AfterCue
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad Pract_ANT_Cue
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='no_cue'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='centre_cue'" text="*" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='double_cue'" text="*" x=0.0 y=-134.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='double_cue'" text="*" x=0.0 y=192.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='spatial_cue_top'" text="*" x=-10.0 y=-133.0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=120 html=yes show_if="[cue_type]='spatial_cue_bottom'" text="*" x=0.0 y=192.0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='double_cue'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='spatial_cue_top'" text="+" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if="[cue_type]='spatial_cue_bottom'" text="+" x=0 y=0 z_index=0

define sketchpad Pract_ANT_Fix2
	set duration "[fix2]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad Pract_ANT_Fixation
	set duration "[fix1]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0

define keyboard_response Pract_ANT_Response
	set timeout 1700
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "z;/"

define sketchpad Pract_ANT_Target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw image center=1 file="[stimuli].png" scale=1 show_if="[target_loc]='top'" x=0.0 y=-192.0 z_index=0
	draw image center=1 file="[stimuli].png" scale=1 show_if="[target_loc]='bottom'" x=0.0 y=192.0 z_index=0

define loop Pract__ANT
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 stimuli Neutral_Left
	setcycle 0 Condition neutral
	setcycle 0 correct_response z
	setcycle 0 cue_type no_cue
	setcycle 0 target_loc top
	setcycle 1 stimuli Neutral_Right
	setcycle 1 Condition neutral
	setcycle 1 correct_response "/"
	setcycle 1 cue_type no_cue
	setcycle 1 target_loc top
	setcycle 2 stimuli Congruent_Left
	setcycle 2 Condition congruent
	setcycle 2 correct_response z
	setcycle 2 cue_type no_cue
	setcycle 2 target_loc top
	setcycle 3 stimuli Congruent_Right
	setcycle 3 Condition congruent
	setcycle 3 correct_response "/"
	setcycle 3 cue_type no_cue
	setcycle 3 target_loc top
	setcycle 4 stimuli Incongruent_Left
	setcycle 4 Condition incongruent
	setcycle 4 correct_response z
	setcycle 4 cue_type centre_cue
	setcycle 4 target_loc top
	setcycle 5 stimuli Incongruent_Right
	setcycle 5 Condition incongruent
	setcycle 5 correct_response "/"
	setcycle 5 cue_type double_cue
	setcycle 5 target_loc top
	setcycle 6 stimuli Neutral_Left
	setcycle 6 Condition neutral
	setcycle 6 correct_response z
	setcycle 6 cue_type no_cue
	setcycle 6 target_loc bottom
	setcycle 7 stimuli Neutral_Right
	setcycle 7 Condition neutral
	setcycle 7 correct_response "/"
	setcycle 7 cue_type centre_cue
	setcycle 7 target_loc bottom
	setcycle 8 stimuli Congruent_Right
	setcycle 8 Condition congruent
	setcycle 8 correct_response "/"
	setcycle 8 cue_type double_cue
	setcycle 8 target_loc bottom
	setcycle 9 stimuli Incongruent_Left
	setcycle 9 Condition incongruent
	setcycle 9 correct_response z
	setcycle 9 cue_type spatial_cue_top
	setcycle 9 target_loc top
	setcycle 10 stimuli Incongruent_Right
	setcycle 10 Condition incongruent
	setcycle 10 correct_response "/"
	setcycle 10 cue_type spatial_cue_bottom
	setcycle 10 target_loc bottom
	run Pract_ANT

define inline_script Randomise_Fixation_1_1
	set description "Executes Python code"
	___run__
	# import random
	# var.fix1 = random.randint(400,1600)
	# var.fix2 = 3500-var.fix1
	__end__
	___prepare__
	import random
	var.fix1 = random.randint(400,1600)
	var.fix2 = 3500-var.fix1
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PractANT_Instr1 always
	run PractANT_Instr2 always
	run PractANT_Instr3 always
	run PractANT_Instr4 always
	run Pract__ANT always
	run ANT_PRACT_TO_EXP always
	run ANT_Loop always
	run End always

define feedback feedback_correct
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#009a00" font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define feedback feedback_incorrect
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#e60000" font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text="Incorrect!" x=0 y=0 z_index=0

