---
API: 2.1
OpenSesame: 3.3.2
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title StroopTask
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/Jennifer/Dropbox/StrathclydeOnlineLibrary/FinishedTasks"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad End
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=mono font_italic=no font_size=37 html=yes show_if=always text="The End" x=0 y=-288 z_index=0
	draw textline center=1 color="#ff0000" font_bold=yes font_family=mono font_italic=no font_size=37 html=yes show_if=always text="Insert Debrief and <br />Contact Details here" x=0 y=-128 z_index=0

define logger Logger_All
	set description "Logs experimental data"
	set auto_log yes

define loop Pract_Stroop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word BLUE
	setcycle 0 font_colour yellow
	setcycle 0 congruency incongruent
	setcycle 0 correct_response right
	setcycle 1 word RED
	setcycle 1 font_colour yellow
	setcycle 1 congruency incongruent
	setcycle 1 correct_response up
	setcycle 2 word GREEN
	setcycle 2 font_colour yellow
	setcycle 2 congruency incongruent
	setcycle 2 correct_response left
	setcycle 3 word YELLOW
	setcycle 3 font_colour yellow
	setcycle 3 congruency congruent
	setcycle 3 correct_response down
	setcycle 4 word BLUE
	setcycle 4 font_colour green
	setcycle 4 congruency incongruent
	setcycle 4 correct_response right
	setcycle 5 word RED
	setcycle 5 font_colour green
	setcycle 5 congruency incongruent
	setcycle 5 correct_response up
	setcycle 6 word GREEN
	setcycle 6 font_colour green
	setcycle 6 congruency congruent
	setcycle 6 correct_response left
	setcycle 7 word YELLOW
	setcycle 7 font_colour green
	setcycle 7 congruency incongruent
	setcycle 7 correct_response down
	setcycle 8 word BLUE
	setcycle 8 font_colour red
	setcycle 8 congruency incongruent
	setcycle 8 correct_response right
	setcycle 9 word RED
	setcycle 9 font_colour red
	setcycle 9 congruency congruent
	setcycle 9 correct_response up
	setcycle 10 word GREEN
	setcycle 10 font_colour red
	setcycle 10 congruency incongruent
	setcycle 10 correct_response left
	setcycle 11 word YELLOW
	setcycle 11 font_colour red
	setcycle 11 congruency incongruent
	setcycle 11 correct_response down
	setcycle 12 word BLUE
	setcycle 12 font_colour blue
	setcycle 12 congruency congruent
	setcycle 12 correct_response right
	setcycle 13 word RED
	setcycle 13 font_colour blue
	setcycle 13 congruency incongruent
	setcycle 13 correct_response up
	setcycle 14 word GREEN
	setcycle 14 font_colour blue
	setcycle 14 congruency incongruent
	setcycle 14 correct_response left
	setcycle 15 word YELLOW
	setcycle 15 font_colour blue
	setcycle 15 congruency incongruent
	setcycle 15 correct_response down
	run Pract_Stroop_sequence

define sketchpad Pract_Stroop_Blank
	set duration 250
	set description "Displays stimuli"
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define sketchpad Pract_Stroop_Fix
	set duration 800
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define sketchpad Pract_Stroop_Fix2
	set duration 150
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define sketchpad Pract_Stroop_Target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[font_colour]" font_bold=yes font_family=sans font_italic=no font_size=90 html=yes show_if=always text="[word]" x=0 y=0 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define keyboard_response Pract_Stroop_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right;up;down"

define sequence Pract_Stroop_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pract_Stroop_Fix always
	run Pract_Stroop_Blank always
	run Pract_Stroop_Target always
	run Pract_Stroop_keyboard_response always
	run Pract_Stroop_Fix2 always
	run Logger_All always
	run feedback_correct_1 "[correct]=1"
	run feedback_incorrect_1 "[correct]=0"

define sketchpad STROOP_PRACT_TO_EXP
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=60 html=yes show_if=always text="Stroop Task" x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=35 html=yes show_if=always text="You have finished the practice trials.<br /><br />We will now move on to the experiment. <br />The tasks stays he same but you will<br />no longer receive feedback." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=37 html=yes show_if=always text="Press any key to start." x=0 y=160 z_index=0

define sketchpad Stroop_Blank
	set duration 250
	set description "Displays stimuli"
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define sketchpad Stroop_Fix
	set duration 800
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define sketchpad Stroop_Fix2
	set duration 150
	set description "Displays stimuli"
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Stroop_Instr1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=60 html=yes show_if=always text="Stroop Task" x=2 y=-182 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=25 html=yes show_if=always text="You will see colour words written in different ink colours." x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=35 html=yes show_if=always text="" x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=23 html=yes show_if=always text="Your task is to identify the ink colour." x=0 y=-32 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=30 html=yes show_if=always text="Press any key to see the examples <br />and how to respond" x=0 y=192 z_index=0
	draw textline center=1 color="#e60000" font_bold=yes font_family=sans font_italic=no font_size=37 html=yes show_if=always text=GREEN x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="= identify the colour as red, not green." x=0 y=96 z_index=0

define sketchpad Stroop_Instr2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="What colour is the written word?" x=-225 y=-298 z_index=0
	draw textline center=0 color=black font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text=Example x=-48 y=-63 z_index=0
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="" x=320 y=-160 z_index=0
	draw textline center=0 color="#35009f" font_bold=yes font_family=sans font_italic=no font_size=30 html=yes show_if=always text=RED x=-288 y=0 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="= press the blue key!" x=-224 y=0 z_index=0
	draw textline center=1 color="#009a00" font_bold=yes font_family=sans font_italic=no font_size=30 html=yes show_if=always text=YELLOW x=148 y=16 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="= press the <br />green key!" x=288 y=32 z_index=0
	draw textline center=0 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="...and so on." x=-64 y=64 z_index=0
	draw textline center=1 color=black font_bold=yes font_family=sans font_italic=no font_size=30 html=yes show_if=always text="Press any key to start the practice trials." x=2 y=223 z_index=0
	draw textline center=1 color="#aa0000" font_bold=yes font_family=sans font_italic=no font_size=25 html=yes show_if=always text="Use the arrow keys to respond.You can see which key corresponds <br />to which colour above.This picture will also be visible while <br />you perform the task." x=53 y=149 z_index=0
	draw line color="#000000" penwidth=4 show_if=always x1=-94 x2=96 y1=-18 y2=-18 z_index=0
	draw image center=1 file="Stroopkeys.jpg" scale=0.4 show_if=always x=-160 y=-160 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.5 show_if=always x=224 y=-160 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family=sans font_italic=no font_size=60 html=yes show_if=always text="=" x=32 y=-160 z_index=0

define loop Stroop_Loop
	set source table
	set repeat 10
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 word BLUE
	setcycle 0 font_colour yellow
	setcycle 0 congruency incongruent
	setcycle 0 correct_response right
	setcycle 1 word RED
	setcycle 1 font_colour yellow
	setcycle 1 congruency incongruent
	setcycle 1 correct_response up
	setcycle 2 word GREEN
	setcycle 2 font_colour yellow
	setcycle 2 congruency incongruent
	setcycle 2 correct_response left
	setcycle 3 word YELLOW
	setcycle 3 font_colour yellow
	setcycle 3 congruency congruent
	setcycle 3 correct_response down
	setcycle 4 word BLUE
	setcycle 4 font_colour green
	setcycle 4 congruency incongruent
	setcycle 4 correct_response right
	setcycle 5 word RED
	setcycle 5 font_colour green
	setcycle 5 congruency incongruent
	setcycle 5 correct_response up
	setcycle 6 word GREEN
	setcycle 6 font_colour green
	setcycle 6 congruency congruent
	setcycle 6 correct_response left
	setcycle 7 word YELLOW
	setcycle 7 font_colour green
	setcycle 7 congruency incongruent
	setcycle 7 correct_response down
	setcycle 8 word BLUE
	setcycle 8 font_colour red
	setcycle 8 congruency incongruent
	setcycle 8 correct_response right
	setcycle 9 word RED
	setcycle 9 font_colour red
	setcycle 9 congruency congruent
	setcycle 9 correct_response up
	setcycle 10 word GREEN
	setcycle 10 font_colour red
	setcycle 10 congruency incongruent
	setcycle 10 correct_response left
	setcycle 11 word YELLOW
	setcycle 11 font_colour red
	setcycle 11 congruency incongruent
	setcycle 11 correct_response down
	setcycle 12 word BLUE
	setcycle 12 font_colour blue
	setcycle 12 congruency congruent
	setcycle 12 correct_response right
	setcycle 13 word RED
	setcycle 13 font_colour blue
	setcycle 13 congruency incongruent
	setcycle 13 correct_response up
	setcycle 14 word GREEN
	setcycle 14 font_colour blue
	setcycle 14 congruency incongruent
	setcycle 14 correct_response left
	setcycle 15 word YELLOW
	setcycle 15 font_colour blue
	setcycle 15 congruency incongruent
	setcycle 15 correct_response down
	run Stroop_sequence

define sketchpad Stroop_Target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="[font_colour]" font_bold=yes font_family=sans font_italic=no font_size=90 html=yes show_if=always text="[word]" x=0 y=0 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=-320 y=-288 z_index=0
	draw image center=1 file="StroopInstr.jpg" scale=0.4 show_if=always x=320 y=-288 z_index=0

define keyboard_response Stroop_keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "left;right;up;down"

define sequence Stroop_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Stroop_Fix always
	run Stroop_Blank always
	run Stroop_Target always
	run Stroop_keyboard_response always
	run Stroop_Fix2 always
	run Logger_All always

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Stroop_Instr1 always
	run Stroop_Instr2 always
	run Pract_Stroop always
	run STROOP_PRACT_TO_EXP always
	run Stroop_Loop always
	run End always

define feedback feedback_correct_1
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#009a00" font_bold=yes font_family=sans font_italic=no font_size=100 html=yes show_if=always text="Correct!" x=0 y=0 z_index=0

define feedback feedback_incorrect_1
	set reset_variables yes
	set duration 500
	set description "Provides feedback to the participant"
	draw textline center=1 color="#e60000" font_bold=no font_family=sans font_italic=no font_size=100 html=yes show_if=always text="Incorrect!" x=0 y=0 z_index=0

